<?xml version="1.0" encoding="UTF-8"?><batch mzmine_version="3.3.39">
    <batchstep method="io.github.mzmine.modules.io.import_rawdata_all.AllSpectralDataImportModule" parameter_version="1">
        <parameter name="File names">
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF155_A12_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF156_E11_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF150_F03_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF150_G03_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF155_A03_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF147_H06_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF147_F03_pos.mzML</file>
            <file>\\ds.uochb.cas.cz\pluskallab\MS_data\Lana_Mutabdzija\MSV000087728\VGF147_B10_pos.mzML</file>
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        </parameter>
        <parameter name="Advanced import" selected="false">
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        </parameter>
        <parameter name="Spectral library files"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">20000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="true">
            <current_file>C:\Program Files\MZmine\1e4.cdf</current_file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_massdetection.MassDetectionModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
        </parameter>
        <parameter name="Scan types (IMS)">All scan types</parameter>
        <parameter name="Mass detector" selected_item="Auto">
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            <module name="Auto">
                <parameter name="Noise level">2000.0</parameter>
                <parameter name="Detect isotope signals below noise level" selected="false">
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                </parameter>
            </module>
        </parameter>
        <parameter name="Denormalize fragment scans (traps)">false</parameter>
        <parameter name="Output netCDF filename (optional)" selected="true">
            <current_file>C:\Program Files\MZmine\1e4.cdf</current_file>
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        </parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_adapchromatogrambuilder.ModularADAPChromatogramBuilderModule" parameter_version="1">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <retention_time>
                <min>1.0</min>
                <max>8.0</max>
            </retention_time>
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Min group size in # of scans">5</parameter>
        <parameter name="Group intensity threshold">60000.0</parameter>
        <parameter name="Min highest intensity">500000.0</parameter>
        <parameter name="Scan to scan accuracy (m/z)">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">eics</parameter>
        <parameter name="Allow single scan chromatograms"/>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_smoothing.SmoothingModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Smoothing algorithm" selected_item="Savitzky Golay">
            <module name="Savitzky Golay">
                <parameter name="Retention time smoothing" selected="true">5</parameter>
                <parameter name="Mobility smoothing" selected="false">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</parameter>
            </module>
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="Suffix">sm</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.featdet_chromatogramdeconvolution.minimumsearch.MinimumSearchFeatureResolverModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Suffix">r</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
        <parameter name="MS/MS scan pairing" selected="true">
            <parameter name="Minimum relative feature height" selected="true">0.25</parameter>
            <parameter name="Minimum required signals" selected="true">1</parameter>
            <parameter name="MS1 to MS2 precursor tolerance (m/z)">
                <absolutetolerance>0.01</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Retention time filter" selected="Use feature edges" unit="MINUTES">0.05</parameter>
            <parameter name="Limit by ion mobility edges">true</parameter>
            <parameter name="Merge MS/MS spectra (TIMS)">false</parameter>
            <parameter name="Minimum signal intensity (absolute, TIMS)" selected="false">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</parameter>
            <parameter name="Minimum signal intensity (relative, TIMS)" selected="false">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</parameter>
        </parameter>
        <parameter name="Dimension">Retention time</parameter>
        <parameter name="Chromatographic threshold">0.95</parameter>
        <parameter name="Minimum search range RT/Mobility (absolute)">0.05</parameter>
        <parameter name="Minimum relative height">0.0</parameter>
        <parameter name="Minimum absolute height">500000.0</parameter>
        <parameter name="Min ratio of peak top/edge">1.8</parameter>
        <parameter name="Peak duration range (min/mobility)">
            <min>0.01</min>
            <max>0.5</max>
        </parameter>
        <parameter name="Min # of data points">5</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopegrouper.IsotopeGrouperModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">deiso</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.01</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Monotonic shape">true</parameter>
        <parameter name="Maximum charge">2</parameter>
        <parameter name="Representative isotope">Most intense</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_isotopefinder.IsotopeFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Chemical elements">H,C,N,O,S</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>3.0</ppmtolerance>
        </parameter>
        <parameter name="Maximum charge of isotope m/z">1</parameter>
        <parameter name="Search in scans">SINGLE MOST INTENSE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.align_join.JoinAlignerModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Feature list name">Aligned feature list</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Weight for m/z">3.0</parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.15</parameter>
        <parameter name="Weight for RT">1.0</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Mobility weight">1.0</parameter>
        <parameter name="Require same charge state">false</parameter>
        <parameter name="Require same ID">false</parameter>
        <parameter name="Compare isotope pattern" selected="false">
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        </parameter>
        <parameter name="Compare spectra similarity" selected="false">
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        </parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_rowsfilter.RowsFilterModule" parameter_version="2">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">13C peak</parameter>
        <parameter name="Minimum features in a row" selected="true">
            <abs>1</abs>
            <rel>0.0</rel>
        </parameter>
        <parameter name="Minimum features in an isotope pattern" selected="false">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</parameter>
        <parameter name="Validate 13C isotope pattern" selected="true">
            <parameter name="m/z tolerance">
                <absolutetolerance>0.0015</absolutetolerance>
                <ppmtolerance>3.0</ppmtolerance>
            </parameter>
            <parameter name="Max charge">2</parameter>
            <parameter name="Estimate minimum carbon">true</parameter>
            <parameter name="Remove if 13C">true</parameter>
            <parameter name="Exclude isotopes">O</parameter>
        </parameter>
        <parameter name="Remove redundant isotope rows">false</parameter>
        <parameter name="m/z" selected="false"/>
        <parameter name="Retention time" selected="false"/>
        <parameter name="features duration range" selected="false">
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        </parameter>
        <parameter name="Chromatographic FWHM" selected="false">
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        </parameter>
        <parameter name="Charge" selected="false">
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        </parameter>
        <parameter name="Kendrick mass defect" selected="false">
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        </parameter>
        <parameter name="Parameter">No parameters defined</parameter>
        <parameter name="Only identified?">false</parameter>
        <parameter name="Text in identity" selected="false"/>
        <parameter name="Text in comment" selected="false"/>
        <parameter name="Keep or remove rows">Keep rows that match all criteria</parameter>
        <parameter name="Feature with MS2 scan">true</parameter>
        <parameter name="Never remove feature with MS2">true</parameter>
        <parameter name="Reset the feature number ID">false</parameter>
        <parameter name="Mass defect" selected="false"/>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.gapfill_peakfinder.multithreaded.MultiThreadPeakFinderModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">gaps</parameter>
        <parameter name="Intensity tolerance">0.2</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>10.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" unit="MINUTES">0.15</parameter>
        <parameter name="Minimum data points">1</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.dataprocessing.filter_duplicatefilter.DuplicateFilterModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Name suffix">dup</parameter>
        <parameter name="Filter mode">NEW AVERAGE</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>7.5E-4</absolutetolerance>
            <ppmtolerance>1.5</ppmtolerance>
        </parameter>
        <parameter name="RT tolerance" unit="MINUTES">0.035</parameter>
        <parameter name="Mobility tolerance" selected="false">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</parameter>
        <parameter name="Require same identification">false</parameter>
        <parameter name="Original feature list">REMOVE</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_gnps.fbmn.GnpsFbmnExportAndSubmitModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>\\ds.uochb.cas.cz\pluskallab\Users\Lana\Papers\Chapter - Methods in MolBio\MZmine-processing\Ranunculales-data-processing\FBMN_Ranunculales</current_file>
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        </parameter>
        <parameter name="Merge MS/MS (experimental)" selected="false">
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        </parameter>
        <parameter name="Filter rows">MS2 OR ION IDENTITY</parameter>
        <parameter name="Feature intensity">Peak area</parameter>
        <parameter name="CSV export">SIMPLE</parameter>
        <parameter name="Submit to GNPS" selected="false">
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        </parameter>
        <parameter name="Open folder">false</parameter>
    </batchstep>
    <batchstep method="io.github.mzmine.modules.io.export_features_sirius.SiriusExportModule" parameter_version="1">
        <parameter name="Feature lists" type="BATCH_LAST_FEATURELISTS"/>
        <parameter name="Filename">
            <current_file>\\ds.uochb.cas.cz\pluskallab\Users\Lana\Papers\Chapter - Methods in MolBio\MZmine-processing\Ranunculales-data-processing\SIRIUS_Ranunculales</current_file>
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        </parameter>
        <parameter name="Merge MS/MS" selected="false">
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        </parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Only rows with annotation">false</parameter>
        <parameter name="Exclude multiple charge">false</parameter>
        <parameter name="Exclude multimers">false</parameter>
    </batchstep>
</batch>
